<?xml version="1.0"?>
<ReactionScheme>

<Specie name="GluR1" id="GluR1" kdiff="0" kdiffunit="mu2/s" />
<Specie name="GluR1_S831" id="GluR1_S831" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S567" id="GluR1_S567" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKCaM" id="GluR1_CKCaM" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKpCaM" id="GluR1_CKpCaM" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKp" id="GluR1_CKp" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKCaM2" id="GluR1_CKCaM2" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKpCaM2" id="GluR1_CKpCaM2" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_CKp2" id="GluR1_CKp2" kdiff="0"
	kdiffunit="mu2/s" />

<Specie name="GluR1_S831_PP1" id="GluR1_S831_PP1" kdiff="0"
	kdiffunit="mu2/s" />
<Specie name="GluR1_S567_PP1" id="GluR1_S567_PP1" kdiff="0"
	kdiffunit="mu2/s" />

<Specie name="CKCaMCa4"       id="CKCaMCa4"      kdiff="0.1"   kdiffunit="mu2/s"/>
<Specie name="CKpCaMCa4"      id="CKpCaMCa4"     kdiff="3.6"   kdiffunit="mu2/s"/>
<Specie name="CKp"            id="CKp"           kdiff="3.6"   kdiffunit="mu2/s"/>

<Specie name="PP1" id="PP1" kdiff="0" kdiffunit="mu2/s" />


<!--S831-->

<Reaction name="GluR1_CKCaM_bind" id="GluR1_CKCaM_bind">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKCaMCa4" />
  <Product specieID="GluR1_CKCaM" />
  <forwardRate>96.224e-9</forwardRate>
  <reverseRate>0.2e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<!-- GluR1_CKCaM -> GluR1_S831 + CKCaM -->
<Reaction name="GluR1_CKCaM_diss" id="GluR1_CKCaM_diss">
  <Reactant specieID="GluR1_CKCaM" />
  <Product specieID="GluR1_S831" />
  <Product specieID="CKCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKpCaM_bind" id="GluR1_CKpCaM_bind">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKpCaMCa4" />
  <Product specieID="GluR1_CKpCaM" />
  <forwardRate>32.78e-9</forwardRate>
  <reverseRate>0.5e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_CKpCaM -> GluR1_S831 + CKpCaM -->
<Reaction name="GluR1_CKpCaM_diss" id="GluR1_CKpCaM_diss">
  <Reactant specieID="GluR1_CKpCaM" />
  <Product specieID="GluR1_S831" />
  <Product specieID="CKpCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKp_bind" id="GluR1_CKp_bind">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKp" />
  <Product specieID="GluR1_CKp" />
  <forwardRate>32.224e-9</forwardRate>
  <reverseRate>0.5e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKp_diss" id="GluR1_CKp_diss">
  <Reactant specieID="GluR1_CKp" />
  <Product specieID="GluR1_S831" />
  <Product specieID="CKp" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S831_PP1_bind2" id="GluR1_S831_PP1_bind2">
  <Reactant specieID="GluR1_S831" />
  <Reactant specieID="PP1" />
  <Product specieID="GluR1_S831_PP1" />
  <forwardRate>8.75e-6</forwardRate>
  <reverseRate>28e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<!-- GluR1_S831_PP1 -> GluR1 + PP1 -->
<Reaction name="GluR1_S831_PP1_diss2" id="GluR1_S831_PP1_diss2">
  <Reactant specieID="GluR1_S831_PP1" />
  <Product specieID="GluR1" />
  <Product specieID="PP1" />
  <forwardRate>0.5e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<!--S567-->


<Reaction name="GluR1_CKCaM_bind2" id="GluR1_CKCaM_bind2">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKCaMCa4" />
  <Product specieID="GluR1_CKCaM2" />
  <forwardRate>320.224e-9</forwardRate>
  <reverseRate>1.6e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_CKCaM -> GluR1_S567 + CKCaM -->
<Reaction name="GluR1_CKCaM_diss" id="GluR1_CKCaM_diss2">
  <Reactant specieID="GluR1_CKCaM2" />
  <Product specieID="GluR1_S567" />
  <Product specieID="CKCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKpCaM_bind2" id="GluR1_CKpCaM_bind2">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKpCaMCa4" />
  <Product specieID="GluR1_CKpCaM2" />
  <forwardRate>320.78e-9</forwardRate>
  <reverseRate>2e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_CKpCaM -> GluR1_S567 + CKpCaM -->
<Reaction name="GluR1_CKpCaM_diss2" id="GluR1_CKpCaM_diss2">
  <Reactant specieID="GluR1_CKpCaM2" />
  <Product specieID="GluR1_S567" />
  <Product specieID="CKpCaMCa4" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKp_bind2" id="GluR1_CKp_bind2">
  <Reactant specieID="GluR1" />
  <Reactant specieID="CKp" />
  <Product specieID="GluR1_CKp2" />
  <forwardRate>320.224e-9</forwardRate>
  <reverseRate>2e-4</reverseRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_CKp_diss2" id="GluR1_CKp_diss2">
  <Reactant specieID="GluR1_CKp2" />
  <Product specieID="GluR1_S567" />
  <Product specieID="CKp" />
  <forwardRate>6e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>

<Reaction name="GluR1_S567_PP1_bind" id="GluR1_S567_PP1_bind">
  <Reactant specieID="GluR1_S567" />
  <Reactant specieID="PP1" />
  <Product specieID="GluR1_S567_PP1" />
  <forwardRate>16.75e-6</forwardRate>
  <reverseRate>14e-3</reverseRate>
  <Q10>0.2</Q10>
</Reaction>
<!-- GluR1_S567_PP1 -> GluR1 + PP1 -->
<Reaction name="GluR1_S567_PP1_diss" id="GluR1_S567_PP1_diss">
  <Reactant specieID="GluR1_S567_PP1" />
  <Product specieID="GluR1" />
  <Product specieID="PP1" />
  <forwardRate>0.4e-3</forwardRate>
  <Q10>0.2</Q10>
</Reaction>


</ReactionScheme>
